PsychoPy2experiment version="2023.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['images/target_I.jpg', 'images/target_plus.jpg', 'images/target_square.jpg', 'images/target_T.jpg', 'images/target_X.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1, 1, 1]
  expName = choice_RTT_demo
  keyboardBackend = Pyglet
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Routines
  Routine instructions
    TextComponent instr
      color = black
      letterHeight = 0.035
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        In each trial you will recieve audio stimuli.
        At the end of the trial, respond either 'f', 'g' or 'h' if you think that the loudest sound was the first, second or third stimiuli.


        Push spacebar to continue.
    KeyboardComponent startInst
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent startMouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        fA = 0.5
        fB = 0.5
        fC = 0.5
  Routine end_message
    TextComponent end_text
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.5
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      text:
        That’s the experiment finished!

        Thanks for your time. You’ve earned a cup of tea.
  Routine trial
    CodeComponent setStimuli
      Code Type = Auto->JS
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      Begin Routine:
        #positionList = [-0.375,-0.125,0.125,0.375] #list of possible X coordinates for target to appear
        #shuffle(positionList) #randomise these positions
        #targetX = positionList[0] #pick the first value from the list
        #
        ##thisImage is the variable in the Image field of targetImage
        #if thisImage == 'images/target_square.jpg': #path of where to find the target image
        #    corrAns = 'v' #setting the key press that will be the correct answer
        #    #corrButton = square_button #setting the button that will be the correct answer
        #    corrButtonName = 'square_button' #making this a string so that it can be compared later when checking for acccuracy
        #elif thisImage == 'images/target_cross.jpg':
        #    corrAns = 'c'
        #    #corrButton = cross_button
        #    corrButtonName = 'cross_button'
        #elif thisImage == 'images/target_plus.jpg':
        #    corrAns = 'b'
        #    #corrButton = plus_button
        #    corrButtonName = 'plus_button'
        #
        #

        fA = float(f1)
        fB = float(f2)
        fC = float(f3)

        startA = float(start1)
        startB = float(start2)
        startC = float(start3)

        if f1_greater:
            corrAns = 'f'
        if f2_greater:
            corrAns = 'g'
        if f3_greater:
            corrAns = 'h'
    KeyboardComponent keyResp
      allowedKeys [set every repeat] = 'f','g','h'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = start2
      stopVal [duration (s)] = 10
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent recordRTandAccuracy
      Code Type = Auto->JS
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      End Routine:
        #this code is to record the reaction times and accuracy of the trial

        thisRoutineDuration = t # how long did this trial last

        # keyResp.rt is the time with which a key was pressed
        # mouseResp.time is the time with which a button was clicked/pressed
        # thisRecRT - how long it took for participants to respond after onset of targetImage
        # thisRespType - keeping track of which response component was used
        # thisAcc - whether or not the response was correct
        # correctMouseResp - name of column in data output which records the accuracy of mouse responses

        thisRespType = 'keyboard' #record type of response
        thisRecRT = keyResp.rt - start3 #record time taken to response
        if keyResp.corr == 1: #if the response is correct
            thisAcc = 'correct' #print correct
        else:
            thisAcc = 'incorrect'


        #if keyResp.keys:
        #    thisRespType = 'keyboard' #record type of response
        #    thisRecRT = keyResp.rt - onsetTime #record time taken to response
        #    if keyResp.corr == 1: #if the response is correct
        #        thisAcc = 'correct' #print correct
        #    else:
        #        thisAcc = 'incorrect'
        #else:
        #    thisRespType = 'mouse'
        #    thisRecRT = mouseResp.time[0] - onsetTime
        #    if mouseResp.clicked_name[0] == corrButtonName: #check if what was clicked corresponds to the correct button
        #        thisAcc = 'correct'
        #        thisExp.addData('correctMouseResp', 1) #record accuracy of mouse clicks
        #    else:
        #        thisAcc = 'incorrect'
        #        thisExp.addData('correctMouseResp', 0)

        #thisExp.addData('trialRespTimes', thisRecRT) #record the actual response times of each trial

        #print(thisRoutineDuration, thisRecRT, thisRespType, thisAcc, onsetTime)
    SoundComponent sound_1
      hamming = False
      sound = A
      startEstim = startA
      startVal [time (s)] = startA
      stopVal [duration (s)] = 1.0
      volume = fA
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    SoundComponent sound_2
      sound = A
      startEstim = startB
      startVal [time (s)] = startB
      stopVal [duration (s)] = 1.0
      volume = fB
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    SoundComponent sound_3
      sound = A
      startEstim = startC
      startVal [time (s)] = startC
      stopVal [duration (s)] = 1.0
      volume = fC
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  Routine trial_feedback
    TextComponent feedback
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"Answer was " + str(thisAcc) + "\n \n Press spacebar to continue."
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    KeyboardComponent moveOnKeys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine mainTrial_instruct
    TextComponent main_trial_instruct
      color = black
      letterHeight = 0.035
      saveStartStop = False
      startVal [time (s)] = 0.5
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      text:
        Well done, that’s the practice over!

        Now for the main experiment.

        Click / tap / press space to continue!
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent ready_button
      image = images/response_ready.jpg
      pos = (0, -0.25)
      saveStartStop = False
      size = (0.2, 0.1)
      startVal [time (s)] = 1
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Flow
  Routine instructions
  LoopInitiator PracticeLoop loopType="TrialHandler"
    conditionsFile = delay_disc_conditions_2pop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'delay': 3.06, 'start1': 1, 'start2': 4.06, 'start3': 7.12, 'f1': 0.307, 'f2': 0.472, 'f3': 0.394, 'f1_greater': False, 'f2_greater': True, 'f3_greater': False},
      {'delay': 3.775, 'start1': 1, 'start2': 4.775, 'start3': 8.551, 'f1': 0.482, 'f2': 0.432, 'f3': 0.211, 'f1_greater': True, 'f2_greater': False, 'f3_greater': False},
      {'delay': 3.292, 'start1': 1, 'start2': 4.292, 'start3': 7.584, 'f1': 0.43, 'f2': 0.3, 'f3': 0.329, 'f1_greater': True, 'f2_greater': False, 'f3_greater': False},
      {'delay': 3.043, 'start1': 1, 'start2': 4.043, 'start3': 7.086, 'f1': 0.425, 'f2': 0.224, 'f3': 0.353, 'f1_greater': True, 'f2_greater': False, 'f3_greater': False},
      {'delay': 2.522, 'start1': 1, 'start2': 3.522, 'start3': 6.043, 'f1': 0.471, 'f2': 0.322, 'f3': 0.361, 'f1_greater': True, 'f2_greater': False, 'f3_greater': False},
      {'delay': 3.477, 'start1': 1, 'start2': 4.477, 'start3': 7.955, 'f1': 0.225, 'f2': 0.27, 'f3': 0.404, 'f1_greater': False, 'f2_greater': False, 'f3_greater': True},
      {'delay': 2.582, 'start1': 1, 'start2': 3.582, 'start3': 6.163, 'f1': 0.366, 'f2': 0.24, 'f3': 0.283, 'f1_greater': True, 'f2_greater': False, 'f3_greater': False},
      {'delay': 4.535, 'start1': 1, 'start2': 5.535, 'start3': 10.069, 'f1': 0.375, 'f2': 0.216, 'f3': 0.239, 'f1_greater': True, 'f2_greater': False, 'f3_greater': False},
      {'delay': 4.844, 'start1': 1, 'start2': 5.844, 'start3': 10.687, 'f1': 0.489, 'f2': 0.418, 'f3': 0.318, 'f1_greater': True, 'f2_greater': False, 'f3_greater': False}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
    Routine trial
    Routine trial_feedback
  LoopTerminator PracticeLoop
  Routine end_message
